PsychoPy2experiment version="2022.1.2"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'], expInfo['visit'])
  Experiment info = {'participant': '', 'handedness(l/r/a)': 'r', 'visit': '001/002'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = 220308_MID_ABCD_prac_version
  keyboardBackend = ioHub
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Routines
  Routine BlockInstructions
    ImageComponent image
      image = Images\MID_Instructions.bmp
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TitlePage
    TextComponent text_TitlePage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = MID - Practice
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    KeyboardComponent key_resp_TitlePage
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_TitlePage
      Code Type = Auto->JS
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      Before Experiment:
        "This psychopy2 builder file of MID is fully based on the MID eprime file from ABCD and created by Xi Yang."
        "Five possible trial types: Win $.2, Win $5, Lose $.2, Lose $5, $0-no money at stake."
        "The combination of the trial order (1-12) to be collected at the beginning and run number (1-2) determine the time version (1-16) to be used."
        "As Casey et al., 2018 described, such combinations ensure optimized trial orders of the task (2 runs each)."
        "Each run has 50 contiguous trials (10 per trial type) and lasts 5:42."
        "Please refer to ABCD website or Casey et at.'s paper for complete descriptions and original eprime files."

        """
        SetTrials code from eprime
        TrialOrdersR1(1) = "TimeVersion5"
        TrialOrdersR1(2) = "TimeVersion13"
        TrialOrdersR1(3) = "TimeVersion9"
        TrialOrdersR1(4) = "TimeVersion15"
        TrialOrdersR1(5) = "TimeVersion6"
        TrialOrdersR1(6) = "TimeVersion8"
        TrialOrdersR1(7) = "TimeVersion2"
        TrialOrdersR1(8) = "TimeVersion3"
        TrialOrdersR1(9) = "TimeVersion10"
        TrialOrdersR1(10) = "TimeVersion7"
        TrialOrdersR1(11) = "TimeVersion11"
        TrialOrdersR1(12) = "TimeVersion4"

        TrialOrdersR2(1) = "TimeVersion16"
        TrialOrdersR2(2) = "TimeVersion1"
        TrialOrdersR2(3) = "TimeVersion14"
        TrialOrdersR2(4) = "TimeVersion12"
        TrialOrdersR2(5) = "TimeVersion5"
        TrialOrdersR2(6) = "TimeVersion11"
        TrialOrdersR2(7) = "TimeVersion9"
        TrialOrdersR2(8) = "TimeVersion8"
        TrialOrdersR2(9) = "TimeVersion2"
        TrialOrdersR2(10) = "TimeVersion13"
        TrialOrdersR2(11) = "TimeVersion7"
        TrialOrdersR2(12) = "TimeVersion3"

        toRunOne = TrialOrdersR1(numTrialOrder)
        toRunTwo = TrialOrdersR2(numTrialOrder)
        """

        'handedness, a means ambidextrous'
        'in the ABCD version, "session" appears equivalent to "run" in a scan, such that session = 001, means run 1 and run 2 in the same scan'
        'session = 002, means start from run 2. This may be used 1). when the scan needs to be cut short, so only run the second run; 2). 2nd run needs to be rerun due to some issues'
        'to reduce ambiguity, ABCD "session" is changed to "run" and "visit" is added to record isolated scan visits'
        from psychopy.hardware import keyboard
        from psychopy import core
      Before JS Experiment:
        /* This psychopy2 builder file of MID is fully based on the MID eprime file from ABCD and created by Xi Yang. */
        /* Five possible trial types: Win $.2, Win $5, Lose $.2, Lose $5, $0-no money at stake. */
        /* The combination of the trial order (1-12) to be collected at the beginning and run number (1-2) determine the time version (1-16) to be used. */
        /* As Casey et al., 2018 described, such combinations ensure optimized trial orders of the task (2 runs each). */
        /* Each run has 50 contiguous trials (10 per trial type) and lasts 5:42. */
        /* Please refer to ABCD website or Casey et at.'s paper for complete descriptions and original eprime files. */
        /*
        SetTrials code from eprime
        TrialOrdersR1(1) = "TimeVersion5"
        TrialOrdersR1(2) = "TimeVersion13"
        TrialOrdersR1(3) = "TimeVersion9"
        TrialOrdersR1(4) = "TimeVersion15"
        TrialOrdersR1(5) = "TimeVersion6"
        TrialOrdersR1(6) = "TimeVersion8"
        TrialOrdersR1(7) = "TimeVersion2"
        TrialOrdersR1(8) = "TimeVersion3"
        TrialOrdersR1(9) = "TimeVersion10"
        TrialOrdersR1(10) = "TimeVersion7"
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      Begin Experiment:
        TheProbeDuration = 0.35

        final_compensation = 0

        """
        ABCD used a one-button response pad and they
        had any key as correct key press in their behavioral and practice e-prime files
        in case, you want to restrict one key, 6 or 7, also based on handedness, use the script below
        index_finger_key = '6'
        if expInfo['handedness(l/r/a)'] == 'l':
            index_finger_key = '7'
        scripts for calculating correct hit may be updated too!
        """
  Routine Waiting4Scanner
    TextComponent text_Waiting4Scanner
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text = Waiting for experimenter ...
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    KeyboardComponent key_resp_Waiting4Scanner
      allowedKeys = 'apostrophe'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    TextComponent wait_buffer_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine PrepTime
    TextComponent text_PrepTime
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Ready...
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    CodeComponent code_PrepTime
      Code Type = Auto->JS
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      Begin Experiment:
        block_TrialNum = 0
        block_nonNeutralTrialNum = 0
        block_nonNeutralTrialOmission = 0
        block_nonNeutralTrialOmissionPercentage = 0
        block_TrialOmission = 0
        block_TrialOmissionPercentage = 0

        block_rt_list = []
        block_mean_rt = 0

        prbacc = 0
        prbrt = 0
      Begin Routine:
        # at the beginning and reset trials at 0 after run1
        block_TrialNum = 0
        block_nonNeutralTrialNum = 0
        block_nonNeutralTrialOmission = 0
        block_nonNeutralTrialOmissionPercentage = 0
        block_TrialOmission = 0
        block_TrialOmissionPercentage = 0

        block_rt_list = []
        block_acc_list = []
        block_mean_rt = 0

        prbacc = 0
        prbrt = 0
  Routine TextDisplay1
    KeyboardComponent key_resp_text_display1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      store = first key
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    TextComponent text_TextDisplay1
      letterHeight = 0.14
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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  Routine Feedback
    KeyboardComponent key_resp_feedback
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.65
      store = first key
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    CodeComponent code_Feedback
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = ""
        ResponseCheck = ""
        Result= ""
        updated_trial_type = ''
        nonNeutralTrialOmission = 0
        nonNeutralTrialOmissionPercentage = 0
        TrialOmission = 0
        TrialOmissionPercentage = 0
        mean_rt = 0
        Omission_flag = 0
      Begin Routine:
        if cue_key_press == 1 or anticipation_key_press == 1:
            ResponseCheck = "You pressed too soon!"
            prbacc = 0
            prbrt = 0
            # even if ABCD's prac and scanner version didn't check for key press
            # during cue slide
            # OSL prac file check for that and try to correct participant's error
        elif anticipation_key_press == 0 and probe_key_press == 1:
            ResponseCheck = "Correct response!"
            prbacc = 1
            if Condition != "Triangle":
                prbrt = probe_key_press_rt
                rt_list.append(prbrt)
                block_rt_list.append(prbrt)
        elif anticipation_key_press == 0 and probe_key_press == 0:
            ResponseCheck = "You pressed too slow!"
            prbacc = 0
            prbrt = 0

        if Condition == "SmallReward":
            if prbacc == 1:
                Result = "You earn $0.20!"
            else:
                Result = "You did not earn $0.20!"
        elif Condition == "LgReward":
            if prbacc == 1:
                Result = "You earn $5!"
            else:
                Result = "You did not earn $5!"
        elif Condition == "SmallPun":
            if prbacc == 1:
                Result = "You keep $0.20!"
            else:
                Result = "You lose $0.20!"
        elif Condition == "LgPun":
            if prbacc == 1:
                Result = "You keep $5!"
            else:
                Result = "You lose $5!"
        elif Condition == "Triangle":
             Result = "No money at stake!"


        feedback = ResponseCheck + "\n" + Result
        # debug: test_feedback = ResponseCheck + "\n" + str(prbrt) + "\n" + str(Trials) + str(nonNeutralTrialNum) +"\n" + str(mean_acc) + str(round_acc) + "\n" + str(overall_mean_acc) + "\n" + str(TheProbeDuration)
      End Routine:
        if key_resp_Anticipation_slide.keys in ['', [], None] and probe_key_press == 0 and cue_key_press == 0 and key_resp_feedback.keys in ['', [], None]:
            Omission_flag = 1
            TrialOmission += 1
            block_TrialOmission += 1
            TrialOmissionPercentage = TrialOmission/TrialNum*100
            block_TrialOmissionPercentage = block_TrialOmission/block_TrialNum*100
            if Condition != "Triangle":
                nonNeutralTrialOmission += 1
                block_nonNeutralTrialOmission += 1
            nonNeutralTrialOmissionPercentage = nonNeutralTrialOmission/nonNeutralTrialNum*100
            block_nonNeutralTrialOmissionPercentage = block_nonNeutralTrialOmission/block_nonNeutralTrialNum*100

        if Condition == "SmallReward":
            if prbacc == 1:
                updated_trial_type = 'WinSmallHit'
                final_compensation += .2
            else:
                if Omission_flag == 0:
                    updated_trial_type = 'WinSmallMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'WinSmallOmission'
        elif Condition == "LgReward":
            if prbacc == 1:
                updated_trial_type = 'WinBigHit'
                final_compensation += 5
            else:
                if Omission_flag == 0:
                    updated_trial_type = 'WinBigMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'WinBigOmission'
        elif Condition == "SmallPun":
            if prbacc == 1:
                updated_trial_type = 'PunSmallHit'
            else:
                final_compensation -= .2
                if Omission_flag == 0:
                    updated_trial_type = 'PunSmallMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'PunSmallOmission'
        elif Condition == "LgPun":
            if prbacc == 1:
                updated_trial_type = 'PunBigHit'
            else:
                final_compensation -= 5
                if Omission_flag == 0:
                    updated_trial_type = 'PunBigMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'PunBigOmission'
        elif Condition == "Triangle":
             if prbacc == 1:
                updated_trial_type = 'NeuHit'
             else:
                if Omission_flag == 0:
                    updated_trial_type = 'NeuMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'NeuOmission'

        Omission_flag = 0

        thisExp.addData('updated_trial_type', updated_trial_type)

        thisExp.addData('Recordedprbacc', prbacc)
        thisExp.addData('Recordedprbrt', prbrt)

        thisExp.addData('TrialNum', TrialNum)
        thisExp.addData('block_TrialNum', block_TrialNum)
        thisExp.addData('nonNeutralTrialNum', nonNeutralTrialNum)
        thisExp.addData('block_nonNeutralTrialNum', block_nonNeutralTrialNum)
        thisExp.addData('RecordedProbeDuration', TheProbeDuration)

        thisExp.addData('nonNeutralTrialOmission', nonNeutralTrialOmission)
        thisExp.addData('nonNeutralTrialOmissionPercentage', nonNeutralTrialOmissionPercentage)
        thisExp.addData('TrialOmission', TrialOmission)
        thisExp.addData('TrialOmissionPercentage', TrialOmissionPercentage)
        thisExp.addData('block_nonNeutralTrialOmission', block_nonNeutralTrialOmission)
        thisExp.addData('block_nonNeutralTrialOmissionPercentage', block_nonNeutralTrialOmissionPercentage)
        thisExp.addData('block_TrialOmission', block_TrialOmission)
        thisExp.addData('block_TrialOmissionPercentage', block_TrialOmissionPercentage)
        thisExp.addData('final_compensation', final_compensation)
    TextComponent text_Feedback
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.65
      text [set every repeat] = $feedback
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  Routine EndFix
    TextComponent text_EndFix
      letterHeight = 0.14
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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  Routine Goodbye
    TextComponent text_Goodbye
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        All done!


        Please tell the experimenter you are finished.
    KeyboardComponent key_resp_Goodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cue_slide
    KeyboardComponent key_resp_cue_slide
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent code_Cue_slide
      Code Type = Auto->JS
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      Begin Routine:
        cue_key_press = 0
      End Routine:
        if key_resp_cue_slide.keys != None:
            cue_key_press = 1
    ImageComponent image_Cue_slide
      image [set every repeat] = $Cue
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Anticipation_slide
    KeyboardComponent key_resp_Anticipation_slide
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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    TextComponent text_Anticipation_slide
      letterHeight = 0.14
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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    CodeComponent code_Anticipation_slide
      Code Type = Auto->JS
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      Begin Experiment:
        anticipation_key_press = 0
      Begin Routine:
        anticipation_key_press = 0
      End Routine:
        if key_resp_Anticipation_slide.keys != None:
            anticipation_key_press = 1
  Routine Probe_slide
    KeyboardComponent key_resp_Probe_slide
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TheProbeDuration
      store = first key
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    CodeComponent code_Probe_slide
      Code Type = Auto->JS
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      Begin Experiment:
        probe_key_press = 0
        TrialNum = 0
        nonNeutralTrialNum = 0
        rt_list = []
        acc_list = []
      Begin Routine:
        probe_key_press = 0

        TrialNum += 1
        block_TrialNum += 1
        if Condition != "Triangle":
            nonNeutralTrialNum += 1
            block_nonNeutralTrialNum += 1
      End Routine:
        if key_resp_Probe_slide.keys != None:
            probe_key_press = 1

        probe_key_press_rt = key_resp_Probe_slide.rt
    ImageComponent image_Probe_slide
      image [set every repeat] = $Probe
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TheProbeDuration
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  Routine EyeTracking
    CodeComponent code_eye_tracking
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import lcniEye

        lcniEye.Connect(win, filename)
        lcniEye.Calibrate(win)

        lcniEye.StartRecord()
  Routine Win_amount
    CodeComponent code_win_amount
      Code Type = Auto->JS
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      Begin Experiment:
        win_amount = ''
      Begin Routine:
        if final_compensation < 5:
            if expInfo['visit'] == '001':
                final_compensation = 4.8
            else:
                final_compensation = 5.2

        win_amount = 'You just finished MID practice!\n You won $%s in the practice!\nYou can cash the reward for real when you complete the MID in the scanner!'%(round(final_compensation, 1))

        """
        Based on ABCD's description of MID,
        Participants gain an average of $21 and
        all subjects are given at least $1 regardless of performance to maintain motivation during the scan protocol.
        So OSL version, at least $10 on visit 1 (for more motivation during the 2nd visit)
        & at least $5 on visit 2
        """
    TextComponent text_win_amount
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $win_amount
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    KeyboardComponent key_resp_win_amount
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroShapes
    TextComponent text_IntroShapes
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this game you will have the chance to win money! The game is played with three shapes.

        First, you will see all the shapes and learn what each shape means!
    KeyboardComponent key_resp_IntroShapes
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WinSml
    ImageComponent image_WinSml
      image = Images/WinSmall.BMP
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_WinSml
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WinLrg
    ImageComponent image_WinLrg
      image = Images/WinBig.BMP
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_WinLrg
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LoseSml
    ImageComponent image_LoseSml
      image = Images/LoseSmall.BMP
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_LoseSml
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LoseLrg
    ImageComponent image_LoseLrg
      image = Images/LoseBig.BMP
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_LoseLrg
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Neut
    ImageComponent image_Neut
      image = Images/Neutral.BMP
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_Neut
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ShapeFixInstruct
    TextComponent text_ShapeFixInstruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The first thing that will happen in the game is one of the shapes you just saw will come up. All you have to do is read the shape to see if you will win, lose, or if no money is at stake.

        After the shape you will see a plus sign. When you see the plus sign you should just wait.
    KeyboardComponent key_resp_ShapeFixInstruct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroProbes
    TextComponent text_IntroProbes
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After the plus sign there will always be a black shape that is the same shape as the one you just saw.
        Your job is to press a button under your pointer finger when you see the black shape.
    KeyboardComponent key_resp_IntroProbes
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Winprb
    ImageComponent image_Winprb
      image = Images/WinProbe.BMP
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_Winprb
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Loseprb
    ImageComponent image_Loseprb
      image = Images/LoseProbe.BMP
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_Loseprb
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Neuprob
    ImageComponent image_Neuprb
      image = Images/NeutralProbe.BMP
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_Neuprb
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Probes2
    TextComponent text_Probes2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you press too soon or do not press when the black shape is up, you will not receive the outcome for that shape.

        You are now going to practice pressing your pointer finger when you see the black shape!
    KeyboardComponent key_resp_Probes2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DisplayPracticeRT
    CodeComponent code_block_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        # default block feedback msg when no block-based red flag was raised
        block_feedback_msg = ''
      Begin Routine:
        mean_rt_ms = mean_rt *1000
        block_feedback_msg = 'When you saw a non-triangle sign, \nyour reaction time was %smsec;\nyou did not respond for %s time(s).\nIncluding the triangle rounds, you did not respond %s percent of the time.'%(round(mean_rt_ms, 1), nonNeutralTrialOmission, round(TrialOmissionPercentage, 2))

        #Informing participants about their omission errors on non-triangle and all trials.
        #omission means no key press at all, not including slow responses
        #both non-triangle and all trial omission need to be < 20%; if the latter is higher than the former value, remind the participant to try to respond as much as they can, even if it's a triangle trial
        # the mean_rt needs to be recorded to put in the scanner version later
    TextComponent text_block_feedback
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedback_msg
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    KeyboardComponent key_resp_block_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CheckRT
    CodeComponent code_CheckRT
      Code Type = Auto->JS
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      Begin Routine:
        rt_array = np.array(rt_list)
        block_rt_array = np.array(block_rt_list)

        # mean_rt is the cumulative non-neutral correct trial rt average
        if len(rt_list) > 0:
            mean_rt = rt_array.mean()
        if len(block_rt_list) > 0:
            block_mean_rt = block_rt_array.mean()

        if block_mean_rt > .1:
            TimingBlockList.finished = True
        else:
            TheProbeDuration = .4

        thisExp.addData('mean_rt', mean_rt)
        thisExp.addData('block_mean_rt', block_mean_rt)
  Routine PartOneEndText
    TextComponent text_PartOneEndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job!

        We have one more practice round for the MID game.

        Remember to press your POINTER FINGER when you see the black shape appear on the screen.

        Press your POINTER FINGER to continue.
    KeyboardComponent key_resp_PartOneEndText
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_PartOneEndText
      Code Type = Auto->JS
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      End Routine:
        TrialNum = 0
        nonNeutralTrialNum = 0
        nonNeutralTrialOmission = 0
        nonNeutralTrialOmissionPercentage = 0
        TrialOmission = 0
        TrialOmissionPercentage = 0
        mean_rt = 0
        rt_list = []
        final_compensation = 0
  Routine BlockInstruction
    TextComponent text_BlockInstruction1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction1
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    TextComponent text_BlockInstruction2
      letterHeight = 0.05
      pos = (0, 3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction2
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    KeyboardComponent key_resp_BlockInstruction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_cue_slide
    KeyboardComponent key_resp_cue_slide_2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent code_Cue_slide_2
      Code Type = Auto->JS
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      Begin Experiment:
        prac_cue_image = 'Images/WinSmall.bmp'
        cue_key_press = 0
      Begin Routine:
        prac_cue_image = 'Images/'+Task+'.bmp'
        cue_key_press = 0
      End Routine:
        if key_resp_cue_slide_2.keys != None:
            cue_key_press = 1
    ImageComponent image_Cue_slide_2
      image [set every repeat] = $prac_cue_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine prac_probe_slide
    KeyboardComponent key_resp_Probe_slide_2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TheProbeDuration
      store = first key
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    CodeComponent code_Probe_slide_2
      Code Type = Auto->JS
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      Begin Experiment:
        probe_key_press = 0
        probe_key_press_rt = 0
        TrialNum = 0
        nonNeutralTrialNum = 0
        rt_list = []
        acc_list = []
        prac_probe_image = 'Images/WinProbe.bmp'
      Begin Routine:
        prac_probe_image = 'Images/' + ProbeType + 'Probe.bmp'
        probe_key_press = 0

        TrialNum += 1
        block_TrialNum += 1
        if Condition != "Triangle":
            nonNeutralTrialNum += 1
            block_nonNeutralTrialNum += 1
      End Routine:
        if key_resp_Probe_slide_2.keys != None:
            probe_key_press = 1
        probe_key_press_rt = key_resp_Probe_slide_2.rt
    ImageComponent image_Probe_slide_2
      image [set every repeat] = $prac_probe_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TheProbeDuration
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Flow
  Routine TitlePage
  Routine IntroShapes
  Routine WinSml
  Routine WinLrg
  Routine LoseSml
  Routine LoseLrg
  Routine Neut
  Routine ShapeFixInstruct
  Routine IntroProbes
  Routine Winprb
  Routine Loseprb
  Routine Neuprob
  Routine Probes2
  LoopInitiator trials_IFISBlockList loopType="TrialHandler"
    conditionsFile = Time_versions/MID_ABCD_prac1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Task': 'WinSmall', 'ListName': 'WinSmall', 'ProbeType': 'Win', 'Instruction1': 'You have a chance to WIN $0.20!', 'Instruction2': 'To win the money, press with your POINTER FINGER when the black circle appears on the screen.'},
      {'Task': 'WinBig', 'ListName': 'WinBig', 'ProbeType': 'Win', 'Instruction1': 'You have a chance to WIN $5.00!', 'Instruction2': 'To win the money, press with your POINTER FINGER when the black circle appears on the screen.'},
      {'Task': 'LoseSmall', 'ListName': 'LoseSmall', 'ProbeType': 'Lose', 'Instruction1': 'You have a chance to LOSE $0.20!', 'Instruction2': 'To NOT lose the money, press with your POINTER FINGER when the black rectangle appears on the screen.'},
      {'Task': 'LoseBig', 'ListName': 'LoseBig', 'ProbeType': 'Lose', 'Instruction1': 'You have a chance to LOSE $5.00!', 'Instruction2': 'To NOT lose the money, press  with your POINTER FINGER when the black rectangle appears on the screen.'},
      {'Task': 'Neutral', 'ListName': 'Neutral', 'ProbeType': 'Neutral', 'Instruction1': 'You will not win or lose money.', 'Instruction2': 'Please press with your POINTER FINGER when the black triangle appears on the screen.'}]
    Routine BlockInstruction
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine prac_cue_slide
      Routine Anticipation_slide
      Routine prac_probe_slide
      Routine Feedback
    LoopTerminator trials
  LoopTerminator trials_IFISBlockList
  Routine PartOneEndText
  LoopInitiator TimingBlockList loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine BlockInstructions
    Routine PrepTime
    LoopInitiator trials_RewardProc loopType="TrialHandler"
      conditionsFile = Time_versions/MID_ABCD_prac2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Condition': 'SmallReward', 'Cue': 'Images/WinSmall.bmp', 'Probe': 'Images/WinProbe.bmp'},
        {'Condition': 'LgReward', 'Cue': 'Images/WinBig.bmp', 'Probe': 'Images/WinProbe.bmp'},
        {'Condition': 'SmallPun', 'Cue': 'Images/LoseSmall.bmp', 'Probe': 'Images/LoseProbe.bmp'},
        {'Condition': 'LgPun', 'Cue': 'Images/LoseBig.bmp', 'Probe': 'Images/LoseProbe.bmp'},
        {'Condition': 'Triangle', 'Cue': 'Images/Neutral.bmp', 'Probe': 'Images/NeutralProbe.bmp'},
        {'Condition': 'LgReward', 'Cue': 'Images/WinBig.bmp', 'Probe': 'Images/WinProbe.bmp'},
        {'Condition': 'SmallPun', 'Cue': 'Images/LoseSmall.bmp', 'Probe': 'Images/LoseProbe.bmp'},
        {'Condition': 'SmallReward', 'Cue': 'Images/WinSmall.bmp', 'Probe': 'Images/WinProbe.bmp'},
        {'Condition': 'Triangle', 'Cue': 'Images/Neutral.bmp', 'Probe': 'Images/NeutralProbe.bmp'},
        {'Condition': 'LgReward', 'Cue': 'Images/WinBig.bmp', 'Probe': 'Images/WinProbe.bmp'},
        {'Condition': 'LgPun', 'Cue': 'Images/LoseBig.bmp', 'Probe': 'Images/LoseProbe.bmp'},
        {'Condition': 'SmallPun', 'Cue': 'Images/LoseSmall.bmp', 'Probe': 'Images/LoseProbe.bmp'},
        {'Condition': 'SmallReward', 'Cue': 'Images/WinSmall.bmp', 'Probe': 'Images/WinProbe.bmp'},
        {'Condition': 'LgPun', 'Cue': 'Images/LoseBig.bmp', 'Probe': 'Images/LoseProbe.bmp'},
        {'Condition': 'Triangle', 'Cue': 'Images/Neutral.bmp', 'Probe': 'Images/NeutralProbe.bmp'}]
      Routine Cue_slide
      Routine Anticipation_slide
      Routine Probe_slide
      Routine Feedback
    LoopTerminator trials_RewardProc
    Routine CheckRT
  LoopTerminator TimingBlockList
  Routine Goodbye
  Routine Win_amount
  Routine DisplayPracticeRT
