PsychoPy2experiment version="2022.1.3"
Settings
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'], expInfo['visit'], expInfo['run'])
  Experiment info = {'participant': '', 'handedness(l/r/a)': 'r', 'visit': '001/002', 'run': '001', 'trialorder': '1', 'averageRT': '300'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = 220308_MID_ABCD_scanner_version
  keyboardBackend = ioHub
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Routines
  Routine BlockInstructions
    ImageComponent image
      image = Images\MID_Instructions.bmp
      size = (1.4, 1.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_instr
      allowedKeys = 'space', index_finger_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TitlePage
    TextComponent text_TitlePage
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text = MID
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    KeyboardComponent key_resp_TitlePage
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_TitlePage
      Code Type = Auto->JS
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      Before Experiment:
        "This psychopy2 builder file of MID is fully based on the MID eprime file from ABCD and created by Xi Yang."
        "Five possible trial types: Win $.2, Win $5, Lose $.2, Lose $5, $0-no money at stake."
        "The combination of the trial order (1-12) to be collected at the beginning and run number (1-2) determine the time version (1-16) to be used."
        "As Casey et al., 2018 described, such combinations ensure optimized trial orders of the task (2 runs each)."
        "Each run has 50 contiguous trials (10 per trial type) and lasts 5:42."
        "Please refer to ABCD website or Casey et at.'s paper for complete descriptions and original eprime files."

        """
        SetTrials code from eprime
        TrialOrdersR1(1) = "TimeVersion5"
        TrialOrdersR1(2) = "TimeVersion13"
        TrialOrdersR1(3) = "TimeVersion9"
        TrialOrdersR1(4) = "TimeVersion15"
        TrialOrdersR1(5) = "TimeVersion6"
        TrialOrdersR1(6) = "TimeVersion8"
        TrialOrdersR1(7) = "TimeVersion2"
        TrialOrdersR1(8) = "TimeVersion3"
        TrialOrdersR1(9) = "TimeVersion10"
        TrialOrdersR1(10) = "TimeVersion7"
        TrialOrdersR1(11) = "TimeVersion11"
        TrialOrdersR1(12) = "TimeVersion4"

        TrialOrdersR2(1) = "TimeVersion16"
        TrialOrdersR2(2) = "TimeVersion1"
        TrialOrdersR2(3) = "TimeVersion14"
        TrialOrdersR2(4) = "TimeVersion12"
        TrialOrdersR2(5) = "TimeVersion5"
        TrialOrdersR2(6) = "TimeVersion11"
        TrialOrdersR2(7) = "TimeVersion9"
        TrialOrdersR2(8) = "TimeVersion8"
        TrialOrdersR2(9) = "TimeVersion2"
        TrialOrdersR2(10) = "TimeVersion13"
        TrialOrdersR2(11) = "TimeVersion7"
        TrialOrdersR2(12) = "TimeVersion3"

        toRunOne = TrialOrdersR1(numTrialOrder)
        toRunTwo = TrialOrdersR2(numTrialOrder)
        """

        'handedness, a means ambidextrous'
        'in the ABCD version, "session" appears equivalent to "run" in a scan, such that session = 001, means run 1 and run 2 in the same scan'
        'session = 002, means start from run 2. This may be used 1). when the scan needs to be cut short, so only run the second run; 2). 2nd run needs to be rerun due to some issues'
        'to reduce ambiguity, ABCD "session" is changed to "run" and "visit" is added to record isolated scan visits'
        from psychopy.hardware import keyboard
        from psychopy import core
      Before JS Experiment:
        /* This psychopy2 builder file of MID is fully based on the MID eprime file from ABCD and created by Xi Yang. */
        /* Five possible trial types: Win $.2, Win $5, Lose $.2, Lose $5, $0-no money at stake. */
        /* The combination of the trial order (1-12) to be collected at the beginning and run number (1-2) determine the time version (1-16) to be used. */
        /* As Casey et al., 2018 described, such combinations ensure optimized trial orders of the task (2 runs each). */
        /* Each run has 50 contiguous trials (10 per trial type) and lasts 5:42. */
        /* Please refer to ABCD website or Casey et at.'s paper for complete descriptions and original eprime files. */
        /*
        SetTrials code from eprime
        TrialOrdersR1(1) = "TimeVersion5"
        TrialOrdersR1(2) = "TimeVersion13"
        TrialOrdersR1(3) = "TimeVersion9"
        TrialOrdersR1(4) = "TimeVersion15"
        TrialOrdersR1(5) = "TimeVersion6"
        TrialOrdersR1(6) = "TimeVersion8"
        TrialOrdersR1(7) = "TimeVersion2"
        TrialOrdersR1(8) = "TimeVersion3"
        TrialOrdersR1(9) = "TimeVersion10"
        TrialOrdersR1(10) = "TimeVersion7"
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      Begin Experiment:
        AdjUserRT = 0
        TheProbeDuration = 0.3
        # default probe duration before any adjustment and when previous RT (practice or visit 1) not available
        # the task always maintain a reasonable degree of difficulty
        if float(expInfo['averageRT']) > 500:
            TheProbeDuration = 500/1000
        elif float(expInfo['averageRT']) < 150:
            TheProbeDuration = 150/1000
        else:
            TheProbeDuration = float(expInfo['averageRT'])/1000
        AdjUserRT = TheProbeDuration
        # at this point, RT is in msec, psychopy use sec; may change later if recorded RT is also in sec, so no need to do /1000

        final_compensation = 0

        index_finger_key = '6'
        if expInfo['handedness(l/r/a)'] == 'l':
            index_finger_key = '3'
        '''
        ABCD used a one-button response pad and they
        had any key as correct key press in their behavioral and practice e-prime files
        '''
  Routine Waiting4Scanner
    TextComponent text_Waiting4Scanner
      letterHeight = 0.12
      startVal [time (s)] = 1.0
      text = Waiting for experimenter ...
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    KeyboardComponent key_resp_Waiting4Scanner
      allowedKeys = 'apostrophe'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    TextComponent wait_buffer_text
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine PrepTime
    TextComponent text_PrepTime
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    CodeComponent code_PrepTime
      Code Type = Auto->JS
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      Begin Experiment:
        run_counter = 0
        block_TrialNum = 0
        block_nonNeutralTrialNum = 0
        block_nonNeutralTrialOmission = 0
        block_nonNeutralTrialOmissionPercentage = 0
        block_TrialOmission = 0
        block_TrialOmissionPercentage = 0

        round_counter = 0

        block_rt_list = []
        block_acc_list = []
        block_overall_mean_acc = 0
        block_mean_rt = 0

        prbacc = 0
        prbrt = 0
        mean_acc = 0
        round_acc = 0
      Begin Routine:
        round_counter = 0
        # at the beginning and reset trials at 0 after run1
        run_counter += 1
        block_TrialNum = 0
        block_nonNeutralTrialNum = 0
        block_nonNeutralTrialOmission = 0
        block_nonNeutralTrialOmissionPercentage = 0
        block_TrialOmission = 0
        block_TrialOmissionPercentage = 0

        block_rt_list = []
        block_acc_list = []
        block_overall_mean_acc = 0
        block_mean_rt = 0

        AdjUserRT = 0
        TheProbeDuration = 0.3
        # default probe duration before any adjustment and when previous RT (practice or visit 1) not available
        # the task always maintain a reasonable degree of difficulty
        if float(expInfo['averageRT']) > 500:
            TheProbeDuration = 500/1000
        elif float(expInfo['averageRT']) < 150:
            TheProbeDuration = 150/1000
        else:
            TheProbeDuration = float(expInfo['averageRT'])/1000
        AdjUserRT = TheProbeDuration

        prbacc = 0
        prbrt = 0
        mean_acc = 0
        round_acc = 0
      End Routine:
        if int(expInfo['run']) == 1 and run_counter == 1:
            if int(expInfo['trialorder']) == 1:
                conditions_file = 'Time_versions/MID_ABCD_time_version5.xlsx'
        else:
            conditions_file = 'Time_versions/MID_ABCD_time_version16.xlsx'

        """
        if int(expInfo['run']) == 1 and run_counter == 1:
            if int(expInfo['trialorder']) == 1:
                conditions_file = 'Time_versions/MID_ABCD_time_version5.xlsx'
        else:
            conditions_file = 'Time_versions/MID_ABCD_time_version16.xlsx'

        TrialOrdersR1(1) = "TimeVersion5"
        TrialOrdersR1(2) = "TimeVersion13"
        TrialOrdersR1(3) = "TimeVersion9"
        TrialOrdersR1(4) = "TimeVersion15"
        TrialOrdersR1(5) = "TimeVersion6"
        TrialOrdersR1(6) = "TimeVersion8"
        TrialOrdersR1(7) = "TimeVersion2"
        TrialOrdersR1(8) = "TimeVersion3"
        TrialOrdersR1(9) = "TimeVersion10"
        TrialOrdersR1(10) = "TimeVersion7"
        TrialOrdersR1(11) = "TimeVersion11"
        TrialOrdersR1(12) = "TimeVersion4"


        TrialOrdersR2(1) = "TimeVersion16"
        TrialOrdersR2(2) = "TimeVersion1"
        TrialOrdersR2(3) = "TimeVersion14"
        TrialOrdersR2(4) = "TimeVersion12"
        TrialOrdersR2(5) = "TimeVersion5"
        TrialOrdersR2(6) = "TimeVersion11"
        TrialOrdersR2(7) = "TimeVersion9"
        TrialOrdersR2(8) = "TimeVersion8"
        TrialOrdersR2(9) = "TimeVersion2"
        TrialOrdersR2(10) = "TimeVersion13"
        TrialOrdersR2(11) = "TimeVersion7"
        TrialOrdersR2(12) = "TimeVersion3"
        """
  Routine TextDisplay1
    KeyboardComponent key_resp_text_display1
      allowedKeys = index_finger_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      store = first key
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    TextComponent text_TextDisplay1
      letterHeight = 0.14
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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  Routine Feedback
    KeyboardComponent key_resp_Feedback
      allowedKeys [set every repeat] = index_finger_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_duration
      store = first key
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    CodeComponent code_Feedback
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = ""
        ResponseCheck = ""
        Result= ""
        updated_trial_type = ''
        nonNeutralTrialOmission = 0
        nonNeutralTrialOmissionPercentage = 0
        TrialOmission = 0
        TrialOmissionPercentage = 0
        mean_rt = 0
        overall_mean_acc = 0
        Omission_flag = 0
      Begin Routine:
        if anticipation_key_press == 1:
            ResponseCheck = "You pressed too soon!"
            prbacc = 0
            prbrt = 0
            # here cue_slide press doesn't count as too soon to be consistent
            # with ABCD's 20161218 version
        elif anticipation_key_press == 0 and probe_key_press == 1:
            ResponseCheck = "Correct response!"
            prbacc = 1
            prbrt = key_resp_Probe_slide.rt
        elif anticipation_key_press == 0 and probe_key_press == 0:
            ResponseCheck = "You pressed too slow!"
            prbacc = 0
            prbrt = 0

        if Condition == "SmallReward":
            if prbacc == 1:
                Result = "You earn $0.20!"
            else:
                Result = "You did not earn $0.20!"
        elif Condition == "LgReward":
            if prbacc == 1:
                Result = "You earn $5!"
            else:
                Result = "You did not earn $5!"
        elif Condition == "SmallPun":
            if prbacc == 1:
                Result = "You keep $0.20!"
            else:
                Result = "You lose $0.20!"
        elif Condition == "LgPun":
            if prbacc == 1:
                Result = "You keep $5!"
            else:
                Result = "You lose $5!"
        elif Condition == "Triangle":
             Result = "No money at stake!"

        test_omission = "%s"%(block_TrialOmission)

        # only gather probe response accuracy for non-neutral trials
        # only compute probe response time average for non-neutral correct trials
        if Condition != "Triangle":
            acc_list.append(prbacc)
            block_acc_list.append(prbacc)
            if prbacc == 1:
                rt_list.append(prbrt)
                block_rt_list.append(prbrt)

        rt_array = np.array(rt_list)
        block_rt_array = np.array(block_rt_list)

        # mean_rt is the cumulative non-neutral correct trial rt average
        if len(rt_list) > 0:
            mean_rt = rt_array.mean()
        if len(block_rt_list) > 0:
            block_mean_rt = block_rt_array.mean()

        if len(acc_list) > 0:
            acc_array = np.array(acc_list)
            # overall_mean_acc is the cumulative non-neutral trial acc/hit average
            overall_mean_acc = acc_array.mean()*100
            # ideally around 60%
        if len(block_acc_list) > 0:
            block_acc_array = np.array(block_acc_list)
            block_overall_mean_acc = block_acc_array.mean()*100
            # ideally around 60%

        feedback = ResponseCheck + "\n" + Result
        # debug: test_feedback = ResponseCheck + "\n" + str(prbrt) + "\n" + str(Trials) + str(nonNeutralTrialNum) +"\n" + str(mean_acc) + str(round_acc) + "\n" + str(overall_mean_acc) + "\n" + str(TheProbeDuration)
      End Routine:
        # "The probe duration is adjusted every three trials starting at trial 7"
        # so the first 6 non-neutral trials will be used to calibrate trial 7 probe's duration
        # then every 3 non-neutral trials, RT is adjusted based on the average between the last (3 NNT) and the recent (3 NNT) accs
        if block_nonNeutralTrialNum == (6 + round_counter*3):
            if block_nonNeutralTrialNum == 6:
                mean_acc = block_overall_mean_acc
                round_acc = block_overall_mean_acc
            else:
                round_acc = block_acc_array[(block_nonNeutralTrialNum-3):(block_nonNeutralTrialNum)].mean()*100
                mean_acc = (prev_acc + round_acc)/2
        # adjust probe duration adatively
        if block_nonNeutralTrialNum == (6 + round_counter*3):
            if mean_acc < 5:
                AdjUserRT = AdjUserRT + 70/1000
            elif mean_acc < 15:
                AdjUserRT = AdjUserRT + 60/1000
            elif mean_acc < 25:
                AdjUserRT = AdjUserRT + 50/1000
            elif mean_acc < 35:
                AdjUserRT = AdjUserRT + 40/1000
            elif mean_acc < 45:
                AdjUserRT = AdjUserRT + 30/1000
            elif mean_acc < 55:
                AdjUserRT = AdjUserRT + 20/1000
            elif mean_acc > 95:
                AdjUserRT = AdjUserRT - 50/1000
            elif mean_acc > 85:
                AdjUserRT = AdjUserRT - 40/1000
            elif mean_acc > 75:
                AdjUserRT = AdjUserRT - 30/1000
            elif mean_acc > 65:
                AdjUserRT = AdjUserRT - 20/1000
            TheProbeDuration = AdjUserRT
            round_counter += 1
            prev_acc = round_acc

        # note, the following omission count is overly-sensitive
        # and it appears that key presses right in-between the routines are missed
        # and treated as omissions. Probably due to the delay between key press and
        # and it getting registered, and the possible lag between routines.
        if key_resp_Anticipation_slide.keys in ['', [], None] and key_resp_Probe_slide.keys in ['', [], None] and key_resp_Cue_slide.keys in ['', [], None] and key_resp_Feedback.keys in ['', [], None]:
            Omission_flag = 1
            TrialOmission += 1
            block_TrialOmission += 1
            TrialOmissionPercentage = nonNeutralTrialOmission/TrialNum*100
            block_TrialOmissionPercentage = block_nonNeutralTrialOmission/block_TrialNum*100
            if Condition != "Triangle":
                nonNeutralTrialOmission += 1
                block_nonNeutralTrialOmission += 1
            nonNeutralTrialOmissionPercentage = nonNeutralTrialOmission/nonNeutralTrialNum*100
            block_nonNeutralTrialOmissionPercentage = block_nonNeutralTrialOmission/block_nonNeutralTrialNum*100

        if Condition == "SmallReward":
            if prbacc == 1:
                updated_trial_type = 'WinSmallHit'
                final_compensation += .2
            else:
                if Omission_flag == 0:
                    updated_trial_type = 'WinSmallMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'WinSmallOmission'
        elif Condition == "LgReward":
            if prbacc == 1:
                updated_trial_type = 'WinBigHit'
                final_compensation += 5
            else:
                if Omission_flag == 0:
                    updated_trial_type = 'WinBigMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'WinBigOmission'
        elif Condition == "SmallPun":
            if prbacc == 1:
                updated_trial_type = 'PunSmallHit'
            else:
                final_compensation -= .2
                if Omission_flag == 0:
                    updated_trial_type = 'PunSmallMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'PunSmallOmission'
        elif Condition == "LgPun":
            if prbacc == 1:
                updated_trial_type = 'PunBigHit'
            else:
                final_compensation -= 5
                if Omission_flag == 0:
                    updated_trial_type = 'PunBigMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'PunBigOmission'
        elif Condition == "Triangle":
             if prbacc == 1:
                updated_trial_type = 'NeuHit'
             else:
                if Omission_flag == 0:
                    updated_trial_type = 'NeuMiss'
                elif Omission_flag == 1:
                    updated_trial_type = 'NeuOmission'

        Omission_flag = 0

        thisExp.addData('updated_trial_type', updated_trial_type)

        thisExp.addData('Recordedprbacc', prbacc)
        thisExp.addData('Recordedprbrt', prbrt)
        thisExp.addData('Recordedmean_rt', mean_rt)

        thisExp.addData('Recordedround_counter', round_counter)
        thisExp.addData('nonNeutralTrialNum', nonNeutralTrialNum)
        thisExp.addData('block_nonNeutralTrialNum', block_nonNeutralTrialNum)
        thisExp.addData('AdjUserRT', AdjUserRT)
        thisExp.addData('overall_mean_acc', overall_mean_acc)
        thisExp.addData('block_overall_mean_acc', block_overall_mean_acc)
        thisExp.addData('round_acc', round_acc)
        thisExp.addData('mean_acc', mean_acc)
        thisExp.addData('RecordedProbeDuration', TheProbeDuration)

        thisExp.addData('nonNeutralTrialOmission', nonNeutralTrialOmission)
        thisExp.addData('nonNeutralTrialOmissionPercentage', nonNeutralTrialOmissionPercentage)
        thisExp.addData('TrialOmission', TrialOmission)
        thisExp.addData('TrialOmissionPercentage', TrialOmissionPercentage)
        thisExp.addData('block_nonNeutralTrialOmission', block_nonNeutralTrialOmission)
        thisExp.addData('block_nonNeutralTrialOmissionPercentage', block_nonNeutralTrialOmissionPercentage)
        thisExp.addData('block_TrialOmission', block_TrialOmission)
        thisExp.addData('block_TrialOmissionPercentage', block_TrialOmissionPercentage)
        thisExp.addData('final_compensation', final_compensation)
        # debug variables
        # thisExp.addData('test_key_resp_Anticipation_slide.keys', key_resp_Anticipation_slide.keys)
        # thisExp.addData('test_key_resp_Probe_slide.keys', key_resp_Probe_slide.keys)
        # thisExp.addData('test_key_resp_cue_slide.keys', key_resp_cue_slide.keys)
        # thisExp.addData('test_key_resp_feedback.keys', key_resp_feedback.keys)
    TextComponent text_Feedback
      letterHeight = 0.095
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_duration
      text [set every repeat] = $feedback
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  Routine EndFix
    TextComponent text_EndFix
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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  Routine Goodbye
    TextComponent text_Goodbye
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = All done!
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    KeyboardComponent key_resp_Goodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cue_slide
    ImageComponent image_Cue_slide
      image [set every repeat] = $Cue
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_Cue_slide
      allowedKeys = index_finger_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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  Routine Anticipation_slide
    TextComponent text_Anticipation_slide
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Anticipation
      text [set every repeat] = +
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    KeyboardComponent key_resp_Anticipation_slide
      allowedKeys [set every repeat] = index_finger_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Anticipation
      store = first key
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    CodeComponent code_Anticipation_slide
      Code Type = Auto->JS
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      Begin Experiment:
        anticipation_key_press = 0
      Begin Routine:
        anticipation_key_press = 0
      End Routine:
        if key_resp_Anticipation_slide.keys != None:
            anticipation_key_press = 1
  Routine Probe_slide
    ImageComponent image_Probe_slide
      image [set every repeat] = $Probe
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TheProbeDuration
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    KeyboardComponent key_resp_Probe_slide
      allowedKeys [set every repeat] = index_finger_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TheProbeDuration
      store = first key
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    CodeComponent code_Probe_slide
      Code Type = Auto->JS
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      Begin Experiment:
        probe_key_press = 0
        TrialNum = 0
        nonNeutralTrialNum = 0
        rt_list = []
        acc_list = []
      Begin Routine:
        TrialNum += 1
        block_TrialNum += 1
        if Condition != "Triangle":
            nonNeutralTrialNum += 1
            block_nonNeutralTrialNum += 1
      End Routine:
        probe_key_press = 0
        if key_resp_Probe_slide.keys != None:
            probe_key_press = 1
        feedback_duration = 2000/1000 - TheProbeDuration
        '''
        It used to be feedback_duration = 1950/1000 - TheProbeDuration
        The same as ABCD's 2016 eprime version.
        I suspect the 50ms empty text_display1 slide was added back then due to
        e-prime accurate timing issues.
        So with psychopy, I removed that display slide 50ms as I
        think it was causing omission errors when participants pressed a key near
        the end of the anticipation slide.
        '''
  Routine EyeTracking
    CodeComponent code_eye_tracking
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import lcniEye

        lcniEye.Connect(win, filename)
        lcniEye.Calibrate(win)

        lcniEye.StartRecord()
  Routine Block_feedback
    CodeComponent code_block_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        # default block feedback msg when no block-based red flag was raised
        block_feedback_msg = ''
      Begin Routine:
        block_feedback_msg = 'When you saw a non-triangle sign, \nyou successfully responded %s percent of the time.'%(round(block_overall_mean_acc, 2))

        #Informing participants about their omission errors on non-triangle trials.
        #It needs to be < 20%
    TextComponent text_block_feedback
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedback_msg
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    KeyboardComponent key_resp_block_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Win_amount
    CodeComponent code_win_amount
      Code Type = Auto->JS
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      Begin Experiment:
        win_amount = ''
      Begin Routine:
        if int(expInfo['visit']) == 1:
            if final_compensation < 10:
                final_compensation = 10
        elif int(expInfo['visit']) == 2:
            if final_compensation < 5:
                final_compensation = 5

        win_amount = 'All done!\n You just won $%s.'%(round(final_compensation, 1))

        """
        Based on ABCD's description of MID,
        Participants gain an average of $21 and
        all subjects are given at least $1 regardless of performance to maintain motivation during the scan protocol.
        So OSL version, at least $10 on visit 1 (for more motivation during the 2nd visit)
        & at least $5 on visit 2
        """
    TextComponent text_win_amount
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $win_amount
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    KeyboardComponent key_resp_win_amount
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine TitlePage
  LoopInitiator trials_RunProc loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = (3-int(expInfo['run']))
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    Routine BlockInstructions
    Routine Waiting4Scanner
    Routine PrepTime
    LoopInitiator trials_RewardProc loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = 1
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      Routine Cue_slide
      Routine Anticipation_slide
      Routine Probe_slide
      Routine Feedback
    LoopTerminator trials_RewardProc
    Routine EndFix
    Routine Block_feedback
  LoopTerminator trials_RunProc
  Routine Win_amount
